neuron iaf_cond_exp_dend:

  state:
    r integer = 0     # counts number of tick during the refractory period
    V_m mV = E_L     # membrane potential
  end

  equations:
    kernel g_inh = exp(-t/tau_syn_inh) # inputs from the inh conductance
    kernel g_inh_dend = exp(-t/tau_syn_inh) # inputs from the inh conductance
    kernel g_exc = exp(-t/tau_syn_exc) # inputs from the exc conductance
    kernel g_exc2 = exp(-t/tau_syn_exc) # inputs from the exc conductance
    kernel g_inh_dend2 = exp(-t/tau_syn_inh) # inputs from the inh conductance

    inline I_syn_exc pA = convolve(g_exc, exc_spikes) * ( V_m - E_exc )
    inline I_syn_inh pA = convolve(g_inh, inh_spikes) * ( V_m - E_inh )
    inline I_syn_inh_dend pA = convolve(g_inh_dend, inh_dend_spikes) * ( V_m - E_inh )
    inline I_syn_ei_dend pA = convolve(g_inh_dend2, inh_dend_spikes) * convolve(g_exc2, exc_spikes) * ( V_m - E_exc ) / alpha_ei_inv
    inline I_leak pA = g_L * ( V_m - E_L )
    V_m' = ( -I_leak - I_syn_exc - I_syn_inh -I_syn_inh_dend + I_e + I_stim + I_syn_ei_dend) / C_m
    # V_m' = ( -I_leak - I_syn_exc - I_syn_inh + I_e + I_stim ) / C_m
  end

  parameters:
    V_th mV = -55 mV        # Threshold potential
    V_reset mV = -60 mV     # Reset potential
    t_ref ms = 2 ms         # Refractory period
    g_L nS = 16.6667 nS     # Leak conductance
    C_m pF = 250 pF         # Membrane capacitance
    E_exc mV = 0 mV       # Inhibitory reversal potential
    E_inh mV = -85 mV       # Inhibitory reversal potential
    E_L mV = -70 mV         # Leak reversal potential (aka resting potential)
    tau_syn_exc ms = 0.2 ms # Synaptic time constant of excitatory synapse
    tau_syn_inh ms = 2 ms   # Synaptic time constant of inhibitory synapse
    alpha_ei_inv nS = -1.0 nS   # Dendritic interaction parameter between syn_inh_dend and syn_exc

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    exc_spikes nS <- spike
    inh_spikes nS <- spike
    inh_dend_spikes nS <- spike
    I_stim pA <- continuous
  end

  output: spike

  update:
    integrate_odes()
    if r != 0: # neuron is absolute refractory
      r =  r - 1
      V_m = V_reset # clamp potential
    elif V_m >= V_th:  # neuron is not absolute refractory
      r = RefractoryCounts
      V_m = V_reset # clamp potential
      emit_spike()
    end

  end

end
